PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'group': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1080]
  expName = preparation_beeps_dynamic
  keyboardBackend = ioHub
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Routines
  Routine instruction_rotation
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    TextComponent instruction_rotation_text
      letterHeight = 1.2
      pos = (12, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Rotation (Brief Rest Period)

        In the next trials, the green cursor still represents your hand movements, but it will appear on the screen with some deviation (rotation).

        As before, your goal is to move in sync with the fourth beep and hit the black target with the green cursor.
        If you move too early or too late, the screen will display a warning: "Too early" or "Too late."

        At the end of this block, you will receive a score representing your timing accuracy with the fourth beep.



        Press [space] to continue...
    KeyboardComponent instruction_rotation_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent threshold_baseline_text
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.1
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Your current threshold is " + '\n' + str(int(warn_threshold * 1000)) + " ms."
      units = norm
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    CodeComponent code_intro_rotation
      Code Type = Auto->JS
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      Begin Routine:
        instruction_rotation_text.alignText='left'

        # 初始化warning出现的变量
        warn_count = []  # 用于存储每个trial是否出现了"too late"/”too early“
        warn_threshold = 0.1  # 初始条件值
        warn_adjust_value = 0.01  # 条件范围调整的数值
  Routine rotation
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    CodeComponent code_rotation
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_rotation.opacity = 0
        diff_ppt_rt = 0
        trial_number += 1  # 增加试验计数

        ## Initialize variables and flags 初始化变量和标志位
        target_show = False
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_mouse = []  # save the position of each frame of the hand movement 用于保存整个trial手运动过程的每一帧位置
        movement_mouse_times_sys = []  # save the time of each frame of the hand movement 用于保存整个trial手运动过程的每一帧的时间
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置
        movement_frames_times_sys = []  # save the time of each frame of the hand movement 用于保存手运动过程的每一帧的时间

        ## 初始化 beep 计时器
        beep_interval = 0.6  # 600ms
        beep_count = 0
        beep_time = core.Clock()
        beep_time.reset()
        beep_started = False  # 标志beep是否已经开始

        ## get preparation times for current trial
        ppt = preparation

        # 计算target出现的时刻
        target_show_delay = (beep_interval*3) - ppt*0.001  # target在第一声beep响起后的时间点出现

        # 计算前5次 trials 的 too late 和too early 次数，仅在 trial 数大于等于 5 时进行
        if len(warn_count) >= 5:
            recent_warn_count = sum(warn_count[-5:])
            # 调整 too late 的判断范围
            if recent_warn_count == 0:
                # 如果前5次没有 warn 出现，则缩小范围
                warn_threshold = warn_threshold - warn_adjust_value
            elif recent_warn_count > 3:
                # 如果前5次有超过 3 次 warn 出现，则扩大范围
                warn_threshold = warn_threshold + warn_adjust_value
            else:
                # 如果在 0 到 2 之间，维持现有范围
                warn_threshold = warn_threshold
        else:
            # 如果当前是前5次trial，保持默认的 too late threshold
            warn_threshold = 0.1

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_rotation.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_rotation.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_rotation.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_rotation.getPos()
        ring_radius = euclidean_dist([fixation_ring_rotation.pos[0],fixation_ring_rotation.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_rotation.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_rotation.opacity = 0
        fixation_ring_rotation.opacity = 0
        mouse_startpoint_ring_rotation.opacity = 0
        feedback_ring_rotation.opacity = 0
        # save mouse position and sys time
        movement_mouse.append(mouse_rotation.getPos())
        movement_mouse_times_sys.append(core.monotonicClock.getTime())
        ## 【before start】
        if not move_start and not feedback_start:
            # 控制鼠标回到原点
            if ring_radius <= 0.8:
                fixation_ring_rotation.opacity = 1
                ring_rotation.opacity = 0
                mouse_startpoint_ring_rotation.opacity = 0
                if ring_radius < 0.5:
                    mouse_startpoint_ring_rotation.opacity = 1
                else:
                    mouse_startpoint_ring_rotation.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_rotation.opacity = 1
                fixation_ring_rotation.opacity = 0
                mouse_startpoint_ring_rotation.opacity = 0
            # 检查鼠标是否在原点停留足够的时间（random_origin_duration）
            if not beep_started and mouse_startpoint_ring_rotation.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                beep_started = True
                beep_time.reset()  # 重置beep计时器

            # 在(750 - preparation)ms 后显示目标
            if beep_started and beep_time.getTime() >= target_show_delay and not target_show:
                target_rotation.opacity = 1
                target_show = True  # 标记目标已显示
                target_onset_time_sys = core.monotonicClock.getTime()
                target_show_time.reset()  # 重置目标显示计时器

                # If the movement distance between two frames is greater than 0.005, movement starts
                # 若两帧运动距离大于0.005且目标已经出现，则运动开始
            if mouseDist > 0.1 and target_show:
                move_start = True
                RT = target_show_time.getTime()
                diff_ppt_rt = RT - ppt*0.001
                move_start_time.reset()
                move_onset_time_sys = core.monotonicClock.getTime()
                if diff_ppt_rt > warn_threshold or diff_ppt_rt < -warn_threshold:
                    warn = True
                else:
                    warn = False
            else:
                move_start = False

        # Beep playing logic
        if beep_started and beep_count < 4:  # Ensure beep logic continues until all beeps are played
            # Play beep at specified intervals
            if beep_time.getTime() >= beep_count * beep_interval:
                beep.play()
                beep_count += 1
                # If all beeps are played, stop further beeping logic
                if beep_count >= 4:
                    beep_started = False  # Optionally reset or stop beep logic here

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_rotation.getPos())
            movement_frames_times_sys.append(core.monotonicClock.getTime())
            #target_rotation.opacity = 0
            mouse_startpoint_ring_rotation.opacity = 0
            ring_rotation.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.02，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.3:
                move_start = 0
                feedback_start = 1
                move_end_time.reset()
                move_end_time_sys = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                if not feedback_position_set:
                    # Conversion of feedback position 反馈位置的转换
                    [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                    [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)

                    feedback_position_set = True  # Set the flag to True

                feedback_ring_rotation.opacity = 1
                target_rotation.opacity = 1
            else:
                feedback_ring_rotation.opacity = 0
                #target_rotation.opacity = 0
                feedback_start_time.reset()
            if feedback_ring_rotation.opacity == 1 and feedback_start_time.getTime() >= feedback_duration:  # feedback duration暂时设为1s
                feedback_ring_rotation.opacity = 0
                target_rotation.opacity = 0
                blank_start = 1
        #        continueRoutine = False
            else:
                blank_start_time.reset()
        else:
            feedback_ring_rotation.opacity = 0

        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
        thisExp.addData('RT', RT) # save reaction time
        thisExp.addData('movement_frames', movement_frames) # save hand movements
        thisExp.addData('movement_frames_timeSys', movement_frames_times_sys) # save hand movements times
        thisExp.addData('movement_mouse', movement_mouse) # save hand movements of entire trial
        thisExp.addData('movement_mouse_timeSys', movement_mouse_times_sys) # save hand movements sys times of entire trial
        thisExp.addData('MoveOnsetTimeSys', move_onset_time_sys) # save hand move_start time in psychopy
        thisExp.addData('MoveEndTimeSys', move_end_time_sys) # save hand move_end time in psychopy
        thisExp.addData('targetOnsetTimeSys', target_onset_time_sys) # save target onset time in psychopy
        thisExp.addData('diff_ppt_rt', diff_ppt_rt)

        # 记录当前 trial 的 too late 情况
        warn_count.append(warn)
        # 打印当前的 threshold
        print(f"Your current threshold is {warn_threshold * 1000:.1f} ms, Warn is {warn}")
    MouseComponent mouse_rotation
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_rotation
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_rotation
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_rotation
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_rotation
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_rotation
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent earlyText_rotation
      color = 1.0000, 0.0980, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt < -0.1
      text = Too Early!!!
      units = norm
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    TextComponent trialCountText_rotation
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.05
      pos = (-0.92, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_number
      units = norm
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    TextComponent lateText_rotation
      color = 0.0039, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt > 0.1
      text = Too Late!!!
      units = norm
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  Routine instruction_aftereffect
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    TextComponent instruction_aftereffect_text
      letterHeight = 1.2
      pos = (12, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        End block of the experiment

        Your goal is to move in sync with the fourth beep to target points directly with your hand, without using any strategy.

        If you move too early or too late, the screen will display a warning: "Too early" or "Too late."

        However, there will be no cursor to indicate the position of your hand movement.
    KeyboardComponent instruction_aftereffect_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent threshold_rotation_text
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.1
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Your current threshold is " + '\n' + str(int(warn_threshold * 1000)) + " ms."
      units = norm
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    CodeComponent code_intro_aftereffect
      Code Type = Auto->JS
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      Begin Routine:
        instruction_aftereffect_text.alignText='left'

        # 初始化warning出现的变量
        warn_count = []  # 用于存储每个trial是否出现了"too late"/”too early“
        warn_threshold = 0.1  # 初始条件值
        warn_adjust_value = 0.01  # 条件范围调整的数值
  Routine aftereffect
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    CodeComponent code_aftereffect
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_aftereffect.opacity = 0
        diff_ppt_rt = 0
        trial_number += 1  # 增加试验计数

        ## Initialize variables and flags 初始化变量和标志位
        target_show = False
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_mouse = []  # save the position of each frame of the hand movement 用于保存整个trial手运动过程的每一帧位置
        movement_mouse_times_sys = []  # save the time of each frame of the hand movement 用于保存整个trial手运动过程的每一帧的时间
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置
        movement_frames_times_sys = []  # save the time of each frame of the hand movement 用于保存手运动过程的每一帧的时间

        ## 初始化 beep 计时器
        beep_interval = 0.6  # 600ms
        beep_count = 0
        beep_time = core.Clock()
        beep_time.reset()
        beep_started = False  # 标志beep是否已经开始

        ## get preparation times for current trial
        ppt = preparation

        # 计算target出现的时刻
        target_show_delay = (beep_interval*3) - ppt*0.001  # target在第一声beep响起后的时间点出现

        # 计算前5次 trials 的 too late 和too early 次数，仅在 trial 数大于等于 5 时进行
        if len(warn_count) >= 5:
            recent_warn_count = sum(warn_count[-5:])
            # 调整 too late 的判断范围
            if recent_warn_count == 0:
                # 如果前5次没有 warn 出现，则缩小范围
                warn_threshold = warn_threshold - warn_adjust_value
            elif recent_warn_count > 3:
                # 如果前5次有超过 3 次 warn 出现，则扩大范围
                warn_threshold = warn_threshold + warn_adjust_value
            else:
                # 如果在 0 到 2 之间，维持现有范围
                warn_threshold = warn_threshold
        else:
            # 如果当前是前5次trial，保持默认的 too late threshold
            warn_threshold = 0.1

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_aftereffect.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_aftereffect.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_baseline.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_aftereffect.getPos()
        ring_radius = euclidean_dist([fixation_ring_aftereffect.pos[0],fixation_ring_aftereffect.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_aftereffect.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_aftereffect.opacity = 0
        fixation_ring_aftereffect.opacity = 0
        mouse_startpoint_ring_aftereffect.opacity = 0
        feedback_ring_aftereffect.opacity = 0
        # save mouse position and sys time
        movement_mouse.append(mouse_aftereffect.getPos())
        movement_mouse_times_sys.append(core.monotonicClock.getTime())
        ## 【before start】
        if not move_start and not feedback_start:
            # 控制鼠标回到原点
            if ring_radius <= 0.8:
                fixation_ring_aftereffect.opacity = 1
                ring_aftereffect.opacity = 0
                mouse_startpoint_ring_aftereffect.opacity = 0
                if ring_radius < 0.5:
                    mouse_startpoint_ring_aftereffect.opacity = 1
                else:
                    mouse_startpoint_ring_aftereffect.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_aftereffect.opacity = 1
                fixation_ring_aftereffect.opacity = 0
                mouse_startpoint_ring_aftereffect.opacity = 0

            # 检查鼠标是否在原点处停留了足够的时间
            if not beep_started and mouse_startpoint_ring_aftereffect.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                beep_started = True
                beep_time.reset()  # 重置beep计时器

            # 在(750 - preparation)ms 后显示目标
            if beep_started and beep_time.getTime() >= target_show_delay and not target_show:
                target_aftereffect.opacity = 1
                target_show = True  # 标记目标已显示
                target_onset_time_sys = core.monotonicClock.getTime()
                target_show_time.reset()  # 重置目标显示计时器

            # 如果两帧之间的鼠标移动距离大于 0.005 且目标已经显示，则运动开始
            if mouseDist > 0.1 and target_show:
                move_start = True
                RT = target_show_time.getTime()
                diff_ppt_rt = RT - ppt*0.001
                move_start_time.reset()
                move_onset_time_sys = core.monotonicClock.getTime()
                if diff_ppt_rt > warn_threshold or diff_ppt_rt < -warn_threshold:
                    warn = True
                else:
                    warn = False
            else:
                move_start = False

        # Beep playing logic
        if beep_started and beep_count < 4:  # Ensure beep logic continues until all beeps are played
            # Play beep at specified intervals
            if beep_time.getTime() >= beep_count * beep_interval:
                beep.play()
                beep_count += 1
                # If all beeps are played, stop further beeping logic
                if beep_count >= 4:
                    beep_started = False  # Optionally reset or stop beep logic here

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_aftereffect.getPos())
            movement_frames_times_sys.append(core.monotonicClock.getTime())
            #target_baseline.opacity = 0
            mouse_startpoint_ring_aftereffect.opacity = 0
            ring_aftereffect.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.002，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.3:
                move_start = 0
                feedback_start = 1
                move_end_time.reset()
                move_end_time_sys = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0


        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                target_aftereffect.opacity = 1
            else:
                feedback_ring_aftereffect.opacity = 0
                #target_rotation.opacity = 0
                feedback_start_time.reset()
            if feedback_start_time.getTime() >= feedback_duration:  # feedback duration暂时设为1s
                target_aftereffect.opacity = 0
                blank_start = 1
        #        continueRoutine = False
            else:
                blank_start_time.reset()
        else:
            feedback_ring_aftereffect.opacity = 0

        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
        thisExp.addData('RT', RT) # save reaction time
        thisExp.addData('movement_frames', movement_frames) # save hand movements
        thisExp.addData('movement_frames_timeSys', movement_frames_times_sys) # save hand movements times
        thisExp.addData('movement_mouse', movement_mouse) # save hand movements of entire trial
        thisExp.addData('movement_mouse_timeSys', movement_mouse_times_sys) # save hand movements sys times of entire trial
        thisExp.addData('MoveOnsetTimeSys', move_onset_time_sys) # save hand move_start time in psychopy
        thisExp.addData('MoveEndTimeSys', move_end_time_sys) # save hand move_end time in psychopy
        thisExp.addData('targetOnsetTimeSys', target_onset_time_sys) # save target onset time in psychopy
        thisExp.addData('diff_ppt_rt', diff_ppt_rt)

        # 记录当前 trial 的 too late 情况
        warn_count.append(warn)
        # 打印当前的 threshold
        print(f"Your current threshold is {warn_threshold * 1000:.1f} ms, Warn is {warn}")
    MouseComponent mouse_aftereffect
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_aftereffect
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (Ring_W, Ring_H)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_aftereffect
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_aftereffect
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_aftereffect
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_aftereffect
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent earlyText_aftereffect
      color = 1.0000, 0.0980, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt < -0.1
      text = Too Early!!!
      units = norm
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    TextComponent trialCountText_aftereffect
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.05
      pos = (-0.92, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_number
      units = norm
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    TextComponent lateText_aftereffect
      color = 0.0039, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt > 0.1
      text = Too Late!!!
      units = norm
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  Routine end
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    TextComponent end_text
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment ends.

        Thanks!
  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_baseline.opacity = 0
        diff_ppt_rt = 0
        trial_number += 1  # 增加试验计数

        ## Initialize variables and flags 初始化变量和标志位
        target_show = False
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_mouse = []  # save the position of each frame of the hand movement 用于保存整个trial手运动过程的每一帧位置
        movement_mouse_times_sys = []  # save the time of each frame of the hand movement 用于保存整个trial手运动过程的每一帧的时间
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置
        movement_frames_times_sys = []  # save the time of each frame of the hand movement 用于保存手运动过程的每一帧的时间

        ## 初始化 beep 计时器
        beep_interval = 0.6  # 600ms
        beep_count = 0
        beep_time = core.Clock()
        beep_time.reset()
        beep_started = False  # 标志beep是否已经开始

        ## get preparation times for current trial
        ppt = preparation

        # 计算target出现的时刻
        target_show_delay = (beep_interval*3) - ppt*0.001  # target在第一声beep响起后的时间点出现

        # 计算前5次 trials 的 too late 和too early 次数，仅在 trial 数大于等于 5 时进行
        if len(warn_count) >= 5:
            recent_warn_count = sum(warn_count[-5:])
            # 调整 too late 的判断范围
            if recent_warn_count == 0:
                # 如果前5次没有 warn 出现，则缩小范围
                warn_threshold = warn_threshold - warn_adjust_value
            elif recent_warn_count > 3:
                # 如果前5次有超过 3 次 warn 出现，则扩大范围
                warn_threshold = warn_threshold + warn_adjust_value
            else:
                # 如果在 0 到 2 之间，维持现有范围
                warn_threshold = warn_threshold
        else:
            # 如果当前是前5次trial，保持默认的 too late threshold
            warn_threshold = 0.1

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_baseline.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_baseline.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_baseline.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_baseline.getPos()
        ring_radius = euclidean_dist([fixation_ring_baseline.pos[0],fixation_ring_baseline.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_baseline.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_baseline.opacity = 0
        fixation_ring_baseline.opacity = 0
        mouse_startpoint_ring_baseline.opacity = 0
        feedback_ring_baseline.opacity = 0
        # save mouse position and sys time
        movement_mouse.append(mouse_baseline.getPos())
        movement_mouse_times_sys.append(core.monotonicClock.getTime())
        ## 【before start】
        if not move_start and not feedback_start:
            # 控制鼠标回到原点
            if ring_radius <= 0.8:
                fixation_ring_baseline.opacity = 1
                ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0
                if ring_radius < 0.5:
                    mouse_startpoint_ring_baseline.opacity = 1
                else:
                    mouse_startpoint_ring_baseline.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_baseline.opacity = 1
                fixation_ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0
                # 如果鼠标远离原点，停止 beep 播放并重置 beep 状态
                if beep_started:
                    beep.stop()  # 停止 beep 声音
                    beep_started = False  # 重置 beep 状态
                    beep_count = 0  # 重置 beep 计数
                    mouse_startpoint_time.reset()  # 重置鼠标在原点的时间

            # 检查鼠标是否在原点处停留了足够的时间
            if not beep_started and mouse_startpoint_ring_baseline.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                beep_started = True
                beep_time.reset()  # 重置beep计时器

            # 在(750 - preparation)ms 后显示目标
            if beep_started and beep_time.getTime() >= target_show_delay and not target_show:
                target_baseline.opacity = 1
                target_show = True  # 标记目标已显示
                target_onset_time_sys = core.monotonicClock.getTime()
                target_show_time.reset()  # 重置目标显示计时器

            # 如果两帧之间的鼠标移动距离大于 0.005 且目标已经显示，则运动开始
            if mouseDist > 0.1 and target_show:
                move_start = True
                RT = target_show_time.getTime()
                diff_ppt_rt = RT - ppt*0.001
                move_start_time.reset()
                move_onset_time_sys = core.monotonicClock.getTime()
                if diff_ppt_rt > warn_threshold or diff_ppt_rt < -warn_threshold:
                    warn = True
                else:
                    warn = False
            else:
                move_start = False

        # Beep playing logic
        if beep_started and beep_count < 4:  # Ensure beep logic continues until all beeps are played
            # Play beep at specified intervals
            if beep_time.getTime() >= beep_count * beep_interval:
                beep.play()
                beep_count += 1
                # If all beeps are played, stop further beeping logic
                if beep_count >= 4:
                    beep_started = False  # Optionally reset or stop beep logic here

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_baseline.getPos())
            movement_frames_times_sys.append(core.monotonicClock.getTime())
            #target_baseline.opacity = 0
            mouse_startpoint_ring_baseline.opacity = 0
            ring_baseline.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.002，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.3:
                move_start = 0
                feedback_start = 1
                move_end_time.reset()
                move_end_time_sys = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0


        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                if not feedback_position_set:
                    # Conversion of feedback position 反馈位置的转换
                    [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                    [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

                    feedback_position_set = True  # Set the flag to True

                feedback_ring_baseline.opacity = 1
                target_baseline.opacity = 1

            else:
                feedback_ring_baseline.opacity = 0
                #target_baseline.opacity = 0
                feedback_start_time.reset()
            if feedback_ring_baseline.opacity == 1 and feedback_start_time.getTime() >= feedback_duration:  # feedback duration设为1s
                feedback_ring_baseline.opacity = 0
                target_baseline.opacity = 0
                blank_start = 1
            else:
                blank_start_time.reset()


        else:
            feedback_ring_baseline.opacity = 0


        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
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    MouseComponent mouse_baseline
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_baseline
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (Ring_W, Ring_H)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_baseline
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_baseline
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_baseline
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_baseline
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent trialCountText_baseline
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.05
      pos = (-0.92, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_number
      units = norm
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    TextComponent earlyText_baseline
      color = 1.0000, 0.0980, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt < -0.1
      text = Too Early!!!
      units = norm
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    TextComponent lateText_baseline
      color = 0.0039, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt > 0.1
      text = Too Late!!!
      units = norm
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  Routine instruction_baseline
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    TextComponent instruction_baseline_text
      letterHeight = 1.2
      pos = (12, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Baseline

        The green cursor represents your hand position. You will start from the center of the screen.

        You will hear four beeps. Your goal is to move in sync with the fourth beep and hit the black target that appears. If you move too early or too late, the screen will display a warning: "Too early" or "Too late."

        At the end of this block, you will receive a score representing your timing accuracy with the fourth beep. The initial score is 100, and a lower score indicates you moved more accurately with the fourth beep.

        Move as straight, fast, and accurately as possible towards the target. Once you hit the target, return to the starting point and wait for the next trial.


        Press [space] to continue...
    KeyboardComponent instruction_baseline_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent threshold_familiarization_text
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.1
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Your current threshold is " + '\n' + str(int(warn_threshold * 1000)) + " ms."
      units = norm
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    CodeComponent code_intro_baseline
      Code Type = Auto->JS
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      Begin Routine:
        instruction_baseline_text.alignText='left'

        # 初始化warning出现的变量
        warn_count = []  # 用于存储每个trial是否出现了"too late"/”too early“
        warn_threshold = 0.1  # 初始条件值
        warn_adjust_value = 0.01  # 条件范围调整的数值
  Routine instruction_familiarization
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    TextComponent instruction_familiarization_text
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 45
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      text:
        Familiarization

        The green cursor represents your hand position.
        You will start from the center of the screen.

        You will hear four beeps.
        In the first half of the trials, your goal is to move in sync with the fourth beep.
        In the second half, you should still move with the fourth beep, but also aim to hit the black target point that appears.
        If you move too early or too late, the screen will display a warning: "Too early" or "Too late."

        At the end of this block, you will receive a score representing your timing accuracy with the fourth beep. The initial score is 100, and a lower score indicates you moved more accurately with the fourth beep.

        Move as straight, fast, and accurately as possible towards the target. Once you hit the target, return to the starting point and wait for the next trial.



        Press [space] to continue...
    KeyboardComponent instruction_familiarization_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_familiarization
      Code Type = Auto->JS
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      Begin Routine:
        instruction_familiarization_text.alignText='left'

        # 初始化warning出现的变量
        warn_count = []  # 用于存储每个trial是否出现了"too late"/”too early“
        warn_threshold = 0.1  # 初始条件值
        warn_adjust_value = 0.01  # 条件范围调整的数值
  Routine familiarization
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    CodeComponent code_familiarization
      Code Type = Py
      Begin Experiment:
        from psychopy.tools.coordinatetools import cart2pol
        from psychopy.tools.coordinatetools import pol2cart
        from psychopy import sound
        from psychopy.sound import Sound
        import random
        from time import sleep, time

        # 初始化试验计数
        trial_number = 0

        # Initialize beep sound
        beep = sound.Sound(800, secs=0.005) # each beep last 5ms

        # 初始化warning出现的变量
        warn_count = []  # 用于存储每个trial是否出现了"too late"/”too early“
        warn_threshold = 0.1  # 初始条件值
        warn_adjust_value = 0.01  # 条件范围调整的数值

        # Calculate Euclidean distance 计算欧氏距离
        def euclidean_dist(vec1, vec2):
            return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)
        # origin hold durations
        random_origin_durations = [1.0, 1.2, 1.4, 1.6]
        # might change depending on which computer/screen is being used
        target_radius = 8 # 12 # 10
        # rotation angle
        angle = 30.0
        # group info: NoDelay=0, LongDelay=1
        group = expInfo['group']
        if group == '0':
            feedback_delay = 0.02
            blank_screen = 1.48
        elif group == '1':
            feedback_delay = 1.2
            blank_screen = 0.3

        # feedback duration 反馈显示的时长
        feedback_duration = 1.0
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_familiarization.opacity = 0
        diff_ppt_rt = 0
        trial_number += 1  # 增加试验计数
        ## Initialize variables and flags 初始化变量和标志位
        target_show = False
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_mouse = []  # save the position of each frame of the hand movement 用于保存整个trial手运动过程的每一帧位置
        movement_mouse_times_sys = []  # save the time of each frame of the hand movement 用于保存整个trial手运动过程的每一帧的时间
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置
        movement_frames_times_sys = []  # save the time of each frame of the hand movement 用于保存手运动过程的每一帧的时间

        ## 初始化 beep 计时器
        beep_interval = 0.6  # 600ms
        beep_count = 0
        beep_time = core.Clock()
        beep_time.reset()
        beep_started = False

        ## get preparation times for current trial
        ppt = preparation

        # 计算target出现的时刻
        target_show_delay = (beep_interval*3) - ppt*0.001  # target在第一声beep响起后的时间点出现

        # 计算前5次 trials 的 too late 和too early 次数，仅在 trial 数大于等于 5 时进行
        if len(warn_count) >= 5:
            recent_warn_count = sum(warn_count[-5:])
            # 调整 too late 的判断范围
            if recent_warn_count == 0:
                # 如果前5次没有 warn 出现，则缩小范围
                warn_threshold = warn_threshold - warn_adjust_value
            elif recent_warn_count > 3:
                # 如果前5次有超过 3 次 warn 出现，则扩大范围
                warn_threshold = warn_threshold + warn_adjust_value
            else:
                # 如果在 0 到 2 之间，维持现有范围
                warn_threshold = warn_threshold
        else:
            # 如果当前是前5次trial，保持默认的 too late threshold
            warn_threshold = 0.1

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_familiarization.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_familiarization.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_familiarization.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_familiarization.getPos()
        ring_radius = euclidean_dist([fixation_ring_familiarization.pos[0],fixation_ring_familiarization.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_familiarization.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_familiarization.opacity = 0
        fixation_ring_familiarization.opacity = 0
        mouse_startpoint_ring_familiarization.opacity = 0
        feedback_ring_familiarization.opacity = 0
        # save mouse position and sys time
        movement_mouse.append(mouse_baseline.getPos())
        movement_mouse_times_sys.append(core.monotonicClock.getTime())
        ## 【before start】
        if not move_start and not feedback_start:
            # 控制鼠标回到原点
            if ring_radius <= 0.8:
                fixation_ring_familiarization.opacity = 1
                ring_familiarization.opacity = 0
                mouse_startpoint_ring_familiarization.opacity = 0
                if ring_radius < 0.5:
                    mouse_startpoint_ring_familiarization.opacity = 1
                else:
                    mouse_startpoint_ring_familiarization.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_familiarization.opacity = 1
                fixation_ring_familiarization.opacity = 0
                mouse_startpoint_ring_familiarization.opacity = 0
                # 如果鼠标远离原点，停止 beep 播放并重置 beep 状态
                if beep_started:
                    beep.stop()  # 停止 beep 声音
                    beep_started = False  # 重置 beep 状态
                    beep_count = 0  # 重置 beep 计数
                    mouse_startpoint_time.reset()  # 重置鼠标在原点的时间

            # 检查鼠标是否在原点处停留了足够的时间
            if not beep_started and mouse_startpoint_ring_familiarization.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                beep_started = True
                beep_time.reset()  # 重置beep计时器

                # 在(750 - preparation)ms 后显示目标
            if beep_started and beep_time.getTime() >= target_show_delay and not target_show:
                target_familiarization.opacity = 1
                target_show = True  # 标记目标已显示
                target_onset_time_sys = core.monotonicClock.getTime()
                target_show_time.reset()  # 重置目标显示计时器

            # 如果两帧之间的鼠标移动距离大于 0.005 且目标已经显示，则运动开始
            if mouseDist > 0.1 and target_show:
                move_start = True
                RT = target_show_time.getTime()
                diff_ppt_rt = RT - ppt*0.001
                move_start_time.reset()
                move_onset_time_sys = core.monotonicClock.getTime()
                if diff_ppt_rt > warn_threshold or diff_ppt_rt < -warn_threshold:
                    warn = True
                else:
                    warn = False
            else:
                move_start = False

        # Beep playing logic
        if beep_started and beep_count < 4:  # Ensure beep logic continues until all beeps are played
            # Play beep at specified intervals
            if beep_time.getTime() >= beep_count * beep_interval:
                beep.play()
                beep_count += 1
                # If all beeps are played, stop further beeping logic
                if beep_count >= 4:
                    beep_started = False  # Optionally reset or stop beep logic here

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_familiarization.getPos())
            movement_frames_times_sys.append(core.monotonicClock.getTime())
            #target_baseline.opacity = 0
            mouse_startpoint_ring_familiarization.opacity = 0
            ring_familiarization.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.002，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.3:
                move_start = 0
                feedback_start = 1
                move_end_time.reset()
                move_end_time_sys = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0


        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                if not feedback_position_set:
                    # Conversion of feedback position 反馈位置的转换
                    [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                    [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

                    feedback_position_set = True  # Set the flag to True

                feedback_ring_familiarization.opacity = 1
                target_familiarization.opacity = 1

            else:
                feedback_ring_familiarization.opacity = 0
                #target_baseline.opacity = 0
                feedback_start_time.reset()
            if feedback_ring_familiarization.opacity == 1 and feedback_start_time.getTime() >= feedback_duration:  # feedback duration设为1s
                feedback_ring_familiarization.opacity = 0
                target_familiarization.opacity = 0
                blank_start = 1
            else:
                blank_start_time.reset()


        else:
            feedback_ring_familiarization.opacity = 0

        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
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    MouseComponent mouse_familiarization
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_familiarization
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (Ring_W, Ring_H)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_familiarization
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_familiarization
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_familiarization
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_familiarization
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent trialCountText_familiarization
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.05
      pos = (-0.92, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_number
      units = norm
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    TextComponent earlyText_familiarization
      color = 1.0000, 0.0980, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt < -warn_threshold
      text = Too Early!!!
      units = norm
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    TextComponent lateText_familiarization
      color = 0.0039, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [condition] = diff_ppt_rt > warn_threshold
      text = Too Late!!!
      units = norm
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Flow
  Routine instruction_familiarization
  LoopInitiator familiarization_trials loopType="TrialHandler"
    conditionsFile = familiarization_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 300, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 180, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 240, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 60, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1},
      {'target_x': None, 'target_y': None, 'preparation': 360, 'familiarization': 1}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
    Routine familiarization
  LoopTerminator familiarization_trials
  Routine instruction_baseline
  LoopInitiator baseline_trials loopType="TrialHandler"
    conditionsFile = baseline_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': -6.93, 'target_y': -4, 'preparation': 360, 'baseline': 1},
      {'target_x': -6.93, 'target_y': 4, 'preparation': 360, 'baseline': 1},
      {'target_x': 4, 'target_y': 6.93, 'preparation': 180, 'baseline': 1},
      {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': 0, 'target_y': -8, 'preparation': 360, 'baseline': 1},
      {'target_x': -8, 'target_y': 0, 'preparation': 120, 'baseline': 1},
      {'target_x': 6.93, 'target_y': -4, 'preparation': 360, 'baseline': 1},
      {'target_x': 0, 'target_y': 8, 'preparation': 360, 'baseline': 1},
      {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': 8, 'target_y': 0, 'preparation': 360, 'baseline': 1},
      {'target_x': 6.93, 'target_y': 4, 'preparation': 300, 'baseline': 1},
      {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': -6.93, 'target_y': 4, 'preparation': 360, 'baseline': 1},
      {'target_x': -6.93, 'target_y': -4, 'preparation': 360, 'baseline': 1},
      {'target_x': 4, 'target_y': 6.93, 'preparation': 60, 'baseline': 1},
      {'target_x': 0, 'target_y': -8, 'preparation': 360, 'baseline': 1},
      {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': -8, 'target_y': 0, 'preparation': 360, 'baseline': 1},
      {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'baseline': 1},
      {'target_x': 0, 'target_y': 8, 'preparation': 360, 'baseline': 1},
      {'target_x': 6.93, 'target_y': 4, 'preparation': 240, 'baseline': 1}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
    Routine baseline
  LoopTerminator baseline_trials
  LoopInitiator repeat_rotation loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instruction_rotation
    LoopInitiator rotation_trials loopType="TrialHandler"
      conditionsFile = rotation_test.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'target_x': 6.93, 'target_y': -4, 'preparation': 360, 'rotation': 1},
        {'target_x': 0, 'target_y': 8, 'preparation': 360, 'rotation': 1},
        {'target_x': 6.93, 'target_y': 4, 'preparation': 360, 'rotation': 1},
        {'target_x': 8, 'target_y': 0, 'preparation': 240, 'rotation': 1},
        {'target_x': -6.93, 'target_y': 4, 'preparation': 360, 'rotation': 1},
        {'target_x': 0, 'target_y': -8, 'preparation': 120, 'rotation': 1},
        {'target_x': -8, 'target_y': 0, 'preparation': 360, 'rotation': 1},
        {'target_x': -6.93, 'target_y': -4, 'preparation': 360, 'rotation': 1},
        {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': 4, 'target_y': 6.93, 'preparation': 60, 'rotation': 1},
        {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': 6.93, 'target_y': 4, 'preparation': 180, 'rotation': 1},
        {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': -6.93, 'target_y': -4, 'preparation': 360, 'rotation': 1},
        {'target_x': 6.93, 'target_y': -4, 'preparation': 360, 'rotation': 1},
        {'target_x': 0, 'target_y': -8, 'preparation': 360, 'rotation': 1},
        {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': 8, 'target_y': 0, 'preparation': 360, 'rotation': 1},
        {'target_x': -6.93, 'target_y': 4, 'preparation': 300, 'rotation': 1},
        {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'rotation': 1},
        {'target_x': -8, 'target_y': 0, 'preparation': 360, 'rotation': 1}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
      Routine rotation
    LoopTerminator rotation_trials
  LoopTerminator repeat_rotation
  Routine instruction_aftereffect
  LoopInitiator aftereffect_trials loopType="TrialHandler"
    conditionsFile = aftereffect_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': 6.93, 'target_y': -4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 4, 'target_y': 6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -8, 'target_y': 0, 'preparation': 60, 'aftereffect': 1},
      {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 0, 'target_y': 8, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 8, 'target_y': 0, 'preparation': 240, 'aftereffect': 1},
      {'target_x': 0, 'target_y': -8, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -6.93, 'target_y': 4, 'preparation': 300, 'aftereffect': 1},
      {'target_x': 6.93, 'target_y': 4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -6.93, 'target_y': -4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 4, 'target_y': 6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 6.93, 'target_y': 4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 6.93, 'target_y': -4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': 4, 'target_y': -6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -6.93, 'target_y': -4, 'preparation': 120, 'aftereffect': 1},
      {'target_x': 0, 'target_y': -8, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -4, 'target_y': 6.93, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -6.93, 'target_y': 4, 'preparation': 360, 'aftereffect': 1},
      {'target_x': -4, 'target_y': -6.93, 'preparation': 360, 'aftereffect': 1}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
    Routine aftereffect
  LoopTerminator aftereffect_trials
  Routine end
